---
API: 2.1
OpenSesame: 3.3.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title PIPmanipulation
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "\\\\chss.datastore.ed.ac.uk\\chss\\ppls\\users\\amitch17\\GitHub\\PIP\\Stimulus code"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad ITI1
	set duration 0
	set description "Displays stimuli"

define keyboard_response ITI1_keypress
	set timeout "[iti1]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "SPACE;space"

define sketchpad ITI2
	set duration 0
	set description "Displays stimuli"

define sketchpad ITI2_1
	set duration 100
	set description "Displays stimuli"

define keyboard_response ITI2_keypress
	set timeout "[iti2]"
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define inline_javascript ITI_prep
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.iti1=100+Math.random()*1000;
	vars.iti2=1750-vars.iti1;
	
	vars.early_response = 0
	__end__

define inline_javascript adjust_volume
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.response_volume_kbd === "up") {
	    vars.vol = Math.min(vars.vol + 10, 100);
	} else if (vars.response_volume_kbd === "down") {
	    vars.vol = Math.max(vars.vol - 10, 10);
	}
	__end__
	set _prepare ""

define inline_javascript beeper
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	const beep_url = "https://softdev.ppls.ed.ac.uk/static/GO_70.wav";
	const audio = new Audio(beep_url);
	audio.volume = vars.vol/100.0;
	audio.addEventListener(
	    "canplaythrough",
	    function () {
	        audio.play();
	    }
	);
	__end__
	set _prepare ""

define sketchpad blank
	set duration 0
	set description "Displays stimuli"

define loop block_2_loop
	set source table
	set repeat 12
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial_type go
	setcycle 0 stim_shape circle
	setcycle 0 sound pip1
	setcycle 0 correct_response space
	setcycle 0 incorrect_response None
	setcycle 1 trial_type go
	setcycle 1 stim_shape circle
	setcycle 1 sound pip2
	setcycle 1 correct_response space
	setcycle 1 incorrect_response None
	setcycle 2 trial_type go
	setcycle 2 stim_shape circle
	setcycle 2 sound blank
	setcycle 2 correct_response space
	setcycle 2 incorrect_response None
	setcycle 3 trial_type "no-go"
	setcycle 3 stim_shape square
	setcycle 3 sound pip1
	setcycle 3 correct_response None
	setcycle 3 incorrect_response space
	setcycle 4 trial_type "no-go"
	setcycle 4 stim_shape square
	setcycle 4 sound pip2
	setcycle 4 correct_response None
	setcycle 4 incorrect_response space
	setcycle 5 trial_type "no-go"
	setcycle 5 stim_shape square
	setcycle 5 sound blank
	setcycle 5 correct_response None
	setcycle 5 incorrect_response space
	setcycle 6 trial_type "no-go"
	setcycle 6 stim_shape square
	setcycle 6 sound blank
	setcycle 6 correct_response None
	setcycle 6 incorrect_response space
	setcycle 7 trial_type go
	setcycle 7 stim_shape circle
	setcycle 7 sound blank
	setcycle 7 correct_response space
	setcycle 7 incorrect_response None
	setcycle 8 trial_type catch_go
	setcycle 8 stim_shape none
	setcycle 8 sound GO
	setcycle 8 correct_response space
	setcycle 8 incorrect_response None
	setcycle 9 trial_type catch_stop
	setcycle 9 stim_shape none
	setcycle 9 sound STOP
	setcycle 9 correct_response None
	setcycle 9 incorrect_response space
	run block_sequence

define inline_javascript block_count
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.block_count = vars.block_count+1
	__end__
	set _prepare ""

define loop block_loop
	set source_file "PIPmanip3_loop.xlsx"
	set source table
	set repeat 5
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial_type 2
	setcycle 0 left_stim circle
	setcycle 0 right_stim square
	setcycle 0 sound pip3
	setcycle 0 correct_response space
	setcycle 0 incorrect_response None
	setcycle 1 trial_type 2
	setcycle 1 left_stim circle
	setcycle 1 right_stim square
	setcycle 1 sound pip4
	setcycle 1 correct_response space
	setcycle 1 incorrect_response None
	setcycle 2 trial_type 2
	setcycle 2 left_stim circle
	setcycle 2 right_stim square
	setcycle 2 sound blank
	setcycle 2 correct_response space
	setcycle 2 incorrect_response None
	setcycle 3 trial_type 2
	setcycle 3 left_stim circle
	setcycle 3 right_stim square
	setcycle 3 sound blank
	setcycle 3 correct_response space
	setcycle 3 incorrect_response None
	setcycle 4 trial_type 2
	setcycle 4 left_stim circle
	setcycle 4 right_stim circle
	setcycle 4 sound pip3
	setcycle 4 correct_response space
	setcycle 4 incorrect_response None
	setcycle 5 trial_type 2
	setcycle 5 left_stim circle
	setcycle 5 right_stim circle
	setcycle 5 sound pip4
	setcycle 5 correct_response space
	setcycle 5 incorrect_response None
	setcycle 6 trial_type 2
	setcycle 6 left_stim circle
	setcycle 6 right_stim circle
	setcycle 6 sound blank
	setcycle 6 correct_response space
	setcycle 6 incorrect_response None
	setcycle 7 trial_type 2
	setcycle 7 left_stim circle
	setcycle 7 right_stim circle
	setcycle 7 sound blank
	setcycle 7 correct_response space
	setcycle 7 incorrect_response None
	setcycle 8 trial_type 2
	setcycle 8 left_stim triangle
	setcycle 8 right_stim circle
	setcycle 8 sound pip3
	setcycle 8 correct_response space
	setcycle 8 incorrect_response None
	setcycle 9 trial_type 2
	setcycle 9 left_stim triangle
	setcycle 9 right_stim circle
	setcycle 9 sound pip4
	setcycle 9 correct_response space
	setcycle 9 incorrect_response None
	setcycle 10 trial_type 2
	setcycle 10 left_stim triangle
	setcycle 10 right_stim circle
	setcycle 10 sound blank
	setcycle 10 correct_response space
	setcycle 10 incorrect_response None
	setcycle 11 trial_type 2
	setcycle 11 left_stim triangle
	setcycle 11 right_stim circle
	setcycle 11 sound blank
	setcycle 11 correct_response space
	setcycle 11 incorrect_response None
	setcycle 12 trial_type 1
	setcycle 12 left_stim triangle
	setcycle 12 right_stim square
	setcycle 12 sound pip3
	setcycle 12 correct_response None
	setcycle 12 incorrect_response space
	setcycle 13 trial_type 1
	setcycle 13 left_stim triangle
	setcycle 13 right_stim square
	setcycle 13 sound pip4
	setcycle 13 correct_response None
	setcycle 13 incorrect_response space
	setcycle 14 trial_type 1
	setcycle 14 left_stim triangle
	setcycle 14 right_stim square
	setcycle 14 sound blank
	setcycle 14 correct_response None
	setcycle 14 incorrect_response space
	setcycle 15 trial_type 1
	setcycle 15 left_stim triangle
	setcycle 15 right_stim square
	setcycle 15 sound blank
	setcycle 15 correct_response None
	setcycle 15 incorrect_response space
	setcycle 16 trial_type 1
	setcycle 16 left_stim square
	setcycle 16 right_stim triangle
	setcycle 16 sound pip3
	setcycle 16 correct_response None
	setcycle 16 incorrect_response space
	setcycle 17 trial_type 1
	setcycle 17 left_stim square
	setcycle 17 right_stim triangle
	setcycle 17 sound pip4
	setcycle 17 correct_response None
	setcycle 17 incorrect_response space
	setcycle 18 trial_type 1
	setcycle 18 left_stim square
	setcycle 18 right_stim triangle
	setcycle 18 sound blank
	setcycle 18 correct_response None
	setcycle 18 incorrect_response space
	setcycle 19 trial_type 1
	setcycle 19 left_stim square
	setcycle 19 right_stim triangle
	setcycle 19 sound blank
	setcycle 19 correct_response None
	setcycle 19 incorrect_response space
	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_start always
	run trial_start_response always
	run ITI_prep always
	run ITI1 always
	run ITI1_keypress always
	run earlyresponse1 always
	run ITI2_1 always
	run earlyresponse_display "[response_ITI1_keypress] = space"
	run sound "[trial_type] > 0"
	run target "[early_response] = 0"
	run keyboard_response "[early_response] = 0"
	run incorrect_display "[response_keyboard_response] = [incorrect_response] and [early_response] = 0"
	run correct_display "[response_keyboard_response] = [correct_response] and [early_response] = 0"
	run logger always

define sketchpad break_screen
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You have completed the first block.<br /><br />Please press SPACE when you are ready to continue." x=0 y=0 z_index=0

define sampler catch
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler catch1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad catch_instruc
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Audio test<br /><br />This is a test to check your audio is working.<br /><br />You will see a blank screen and either hear a 'STOP' or 'GO'.<br /><br />If you hear 'GO' please press SPACE<br />If you hear 'STOP', wait for the next trial.<br /><br />Press SPACE to continue<br />" x=0 y=0 z_index=0

define loop catch_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response space
	setcycle 0 incorrect_response None
	setcycle 0 sound GO
	setcycle 0 trial_type 0
	setcycle 1 correct_response space
	setcycle 1 incorrect_response None
	setcycle 1 sound GO
	setcycle 1 trial_type 0
	setcycle 2 correct_response space
	setcycle 2 incorrect_response None
	setcycle 2 sound GO
	setcycle 2 trial_type 0
	setcycle 3 correct_response space
	setcycle 3 incorrect_response None
	setcycle 3 sound GO
	setcycle 3 trial_type 0
	setcycle 4 correct_response space
	setcycle 4 incorrect_response None
	setcycle 4 sound GO
	setcycle 4 trial_type 0
	setcycle 5 correct_response space
	setcycle 5 incorrect_response None
	setcycle 5 sound GO
	setcycle 5 trial_type 0
	setcycle 6 correct_response None
	setcycle 6 incorrect_response space
	setcycle 6 sound STOP
	setcycle 6 trial_type 0
	setcycle 7 correct_response None
	setcycle 7 incorrect_response space
	setcycle 7 sound STOP
	setcycle 7 trial_type 0
	setcycle 8 correct_response None
	setcycle 8 incorrect_response space
	setcycle 8 sound STOP
	setcycle 8 trial_type 0
	setcycle 9 correct_response None
	setcycle 9 incorrect_response space
	setcycle 9 sound STOP
	setcycle 9 trial_type 0
	run catch_trials

define sequence catch_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run catch_instruc always
	run instruc_response always
	run catch_loop always
	run end_of_catch always
	run instruc_response always

define sequence catch_trials
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_start always
	run trial_start_response always
	run ITI_prep always
	run ITI1 always
	run ITI1_keypress always
	run catch1 always
	run blank always
	run keyboard_response always
	run incorrect_display "[response_keyboard_response] = [incorrect_response]"
	run correct_display "[response_keyboard_response] = [correct_response]"
	run logger always

define sketchpad correct_display
	set duration 495
	set description "Displays stimuli"
	draw rect color=black fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0
	draw textline center=1 color=green font_bold=yes font_family=mono font_italic=no font_size=70 html=yes show_if=always text=CORRECT x=0 y=0 z_index=0
	draw textline center=1 color=green font_bold=yes font_family=mono font_italic=no font_size=70 html=yes show_if=always text="" x=800 y=-96 z_index=0

define sketchpad cross
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=1 show_if=always x1=0 x2=0 y1=-64 y2=64 z_index=0
	draw line color=white penwidth=1 show_if=always x1=-64 x2=64 y1=0 y2=0 z_index=0

define inline_javascript dot_calib_lowy
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_y3_y = 320
	vars.calib_dot_y3_x = 0
	
	// click locations
	vars.calib_clk_y3_y = vars.cursor_y
	vars.calib_clk_y3_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_calib_midy
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_y2_y = 0
	vars.calib_dot_y2_x = 0
	
	// click locations
	vars.calib_clk_y2_y = vars.cursor_y
	vars.calib_clk_y2_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_calib_uppery
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_y1_y = -320
	vars.calib_dot_y1_x = 0
	
	// click locations
	vars.calib_clk_y1_y = vars.cursor_y
	vars.calib_clk_y1_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_calib_x1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_x1_y = 0
	vars.calib_dot_x1_x = -480
	
	// click locations
	vars.calib_clk_x1_y = vars.cursor_y
	vars.calib_clk_x1_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_calib_x2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_x2_y = 0
	vars.calib_dot_x2_x = -320
	
	// click locations
	vars.calib_clk_x2_y = vars.cursor_y
	vars.calib_clk_x2_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_calib_x3
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_x3_y = 0
	vars.calib_dot_x3_x = -192
	
	// click locations
	vars.calib_clk_x3_y = vars.cursor_y
	vars.calib_clk_x3_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_calib_x4
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_x4_y = 0
	vars.calib_dot_x4_x = 192
	
	// click locations
	vars.calib_clk_x4_y = vars.cursor_y
	vars.calib_clk_x4_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_calib_x5
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_x5_y = 0
	vars.calib_dot_x5_x = 320
	
	// click locations
	vars.calib_clk_x5_y = vars.cursor_y
	vars.calib_clk_x5_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_calib_x6
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// dot calib locations
	vars.calib_dot_x6_y = 0
	vars.calib_dot_x6_x = 480
	
	// click locations
	vars.calib_clk_x6_y = vars.cursor_y
	vars.calib_clk_x6_x = vars.cursor_x
	__end__
	set _prepare ""

define sketchpad dot_calibration_9
	set duration 0
	set description "Displays stimuli"

define sketchpad dot_calibration_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="We also need to collect information on your screen resolution.<br /><br />White dots will appear on the screen, please use the mouse to click each of them.<br /><br />Press 'SPACE' when you are ready to continue. " x=0 y=0 z_index=0

define loop dot_calibration_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run dot_calibration_sequence

define inline_javascript dot_calibration_prep
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	// preparing for the experiment
	// calculate mm per pixel based on debit card actual length + pixels of line from this 
	vars.card_pix = vars.screen_test_x2 - vars.screen_test_x1
	vars.pix_permm = vars.card_pix/vars.card_mm //x resolution divided by widthx10
	__end__

define sequence dot_calibration_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run dot_calibration_prep always
	run dot_calibrationy1 always
	run dot_response always
	run dot_calib_uppery always
	run dot_calibrationy2 always
	run dot_response always
	run dot_calib_midy always
	run dot_calibrationy3 always
	run dot_response always
	run dot_calib_lowy always
	run dot_calibrationx1 always
	run dot_response always
	run dot_calib_x1 always
	run dot_calibrationx2 always
	run dot_response always
	run dot_calib_x2 always
	run dot_calibrationx3 always
	run dot_response always
	run dot_calib_x3 always
	run dot_calibrationx4 always
	run dot_response always
	run dot_calib_x4 always
	run dot_calibrationx5 always
	run dot_response always
	run dot_calib_x5 always
	run dot_calibrationx6 always
	run dot_response always
	run dot_calib_x6 always

define sketchpad dot_calibrationx1
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=-480 y=0 z_index=0

define sketchpad dot_calibrationx2
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=-320 y=0 z_index=0

define sketchpad dot_calibrationx3
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=-192 y=0 z_index=0

define sketchpad dot_calibrationx4
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=192 y=0 z_index=0

define sketchpad dot_calibrationx5
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=320 y=0 z_index=0

define sketchpad dot_calibrationx6
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=480 y=0 z_index=0

define sketchpad dot_calibrationy1
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=0 y=-320 z_index=0

define sketchpad dot_calibrationy2
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=0 y=0 z_index=0

define sketchpad dot_calibrationy3
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=0 y=320 z_index=0

define mouse_response dot_response
	set timeout 3000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define sketchpad early_response_display
	set duration 495
	set description "Displays stimuli"
	draw rect color=red fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define inline_javascript earlyresponse1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.response_ITI1_keypress == 'SPACE') {	
		vars.early_response = 1
	}
	__end__
	set _prepare ""

define inline_javascript earlyresponse2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.response_ITI2_keypress == 'space') {	
		vars.early_response = 1
	}
	__end__
	set _prepare ""

define inline_javascript earlyresponse2_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.response_ITI2_keypress == 'space') {	
		vars.early_response = 1
	}
	__end__
	set _prepare ""

define inline_javascript earlyresponse2_2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.response_ITI2_keypress == 'space') {	
		vars.early_response = 1
	}
	__end__
	set _prepare ""

define sketchpad earlyresponse_display
	set duration 495
	set description "Displays stimuli"
	draw rect color=black fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=70 html=yes show_if=always text="TOO EARLY" x=0 y=0 z_index=0

define sketchpad end_of_catch
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Thank you.<br /><br />Please press SPACE to start the main task" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="This is the end of the practice. <br /><br />Please press SPACE to move to the first block" x=0 y=0 z_index=0

define keyboard_response end_prac_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "space;SPACE"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run outside_loop always

define sketchpad experiment_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="The experiment has finished.<br /><br />Thank you for taking part!<br /><br />Press 'SPACE' to finish the experiment. " x=0 y=0 z_index=0

define sketchpad experiment_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="If you respond correctly, a green screen will show. <br /><br />If you respond incorrectly, a red screen will show. <br /><br /><br /> " x=0 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Thank you for taking part in this experiment. " x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Circles or squares will appear in the midle of the screen.<br /><br />Respond using 'SPACE' when you see a CIRCLE." x=0 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Do not respond when you see a square." x=0 y=-160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Some trials will have no shapes but you will hear 'go' or 'stop'. <br /><br />When you hear 'go', respond using 'SPACE'.<br /><br />Do not respond when you hear 'stop'." x=32 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="On some trials, you will hear a sound. <br /><br />Ignore these and continue to respond as quickly and as accurately as possible. <br /><br />You will first be given some practice trials to get used to the task. <br /><br /><br /><br />When you are ready, press 'SPACE'." x=0 y=224 z_index=0

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 2
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run experimental_sequence

define sequence experimental_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_count always
	run block_loop always
	run break_screen "[count_block_loop] = 0"
	run instruc_response "[count_block_loop] = 0"

define sketchpad incorrect_display
	set duration 495
	set description "Displays stimuli"
	draw rect color=black fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0
	draw textline center=1 color=red font_bold=yes font_family=mono font_italic=no font_size=70 html=yes show_if=always text=INCORRECT x=0 y=0 z_index=0

define inline_javascript initial_volume
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	set _prepare "vars.vol = 50;"

define keyboard_response instruc_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "space;SPACE"

define sketchpad instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Volume is [vol]%<br /><br />Too loud? Press the down arrow to make it quieter.<br /><br />Too quiet? Press the up arrow to make it louder.<br /><br />Just right? Press the space bar to continue." x=0 y=0 z_index=0

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Instructions:<br /><br />Two shapes will appear on your screen. <br />Your task is to press SPACE <br />as soon as you see a CIRCLE.<br /><br />If neither shape is a circle, <br />wait for the next trial.<br /><br />Sometimes tones will be played at the same time<br />Please ignore the tones and continue as normal<br /><br />You will now complete a short practice block<br /><br /><br />Press SPACE to continue" x=0 y=0 z_index=0

define inline_javascript java_global_prep
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// packages useful for generating random arrays and selecting from them
	// handing for varying target onset time
	//import random from 'random'
	//from random import choice
	//import numpy as np
	
	//import math
	
	//beep = items['beep']
	//blank = items['blank']
	
	//response items
	//stim, response = items['line'], items['line_mouse_response']
	
	// screen measurement variables that need defining
	vars.breaking_variable = false
	// line location
	vars.screen_test_x1 = -450
	vars.screen_test_x2 = 0
	vars.line_y_pos = 0
	vars.card_mm = 86 //for finding mm per pix
	vars.response_mouseclick_done = 0
	
	vars.block_count = 1 //block counter for experimental task
	
	//LocalDate date = LocalDate.now()
	//t0 = clock.time()
	
	// recording log file specfic to experiment
	//subject_nr_string = Integer.toString(vars.subject_nr)
	//data_path = u'/home/experimenter/DMT-AD/DMT2019_rawdata/'
	//vars.data_string = 'subject{sub}_{title}_{date}.csv'
	
	vars.response = "None"
	__end__
	set _prepare ""

define keyboard_response keyboard_response
	set timeout 1000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "space;SPACE"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define logger logger_1
	set description "Logs experimental data"
	set auto_log yes

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define mouse_response new_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define loop outside_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run outside_sequence

define sequence outside_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run java_global_prep always
	run qualtrics never
	run screen_loop always
	run dot_calibration_instructions always
	run dot_calibration_loop always
	run volume_calibration always
	run catch_sequence always
	run instructions_1 always
	run practice_loop always
	run end_of_practice always
	run end_prac_response always
	run experimental_loop always
	run experiment_end always

define sketchpad pause
	set duration 100
	set description "Displays stimuli"

define loop practice_loop
	set source_file "PIPmanip3_loop.xlsx"
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 28
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial_type 2
	setcycle 0 left_stim circle
	setcycle 0 right_stim square
	setcycle 0 sound pip3
	setcycle 0 correct_response space
	setcycle 0 incorrect_response None
	setcycle 1 trial_type 2
	setcycle 1 left_stim circle
	setcycle 1 right_stim square
	setcycle 1 sound pip4
	setcycle 1 correct_response space
	setcycle 1 incorrect_response None
	setcycle 2 trial_type 2
	setcycle 2 left_stim circle
	setcycle 2 right_stim square
	setcycle 2 sound blank
	setcycle 2 correct_response space
	setcycle 2 incorrect_response None
	setcycle 3 trial_type 2
	setcycle 3 left_stim circle
	setcycle 3 right_stim square
	setcycle 3 sound blank
	setcycle 3 correct_response space
	setcycle 3 incorrect_response None
	setcycle 4 trial_type 2
	setcycle 4 left_stim circle
	setcycle 4 right_stim circle
	setcycle 4 sound pip3
	setcycle 4 correct_response space
	setcycle 4 incorrect_response None
	setcycle 5 trial_type 2
	setcycle 5 left_stim circle
	setcycle 5 right_stim circle
	setcycle 5 sound pip4
	setcycle 5 correct_response space
	setcycle 5 incorrect_response None
	setcycle 6 trial_type 2
	setcycle 6 left_stim circle
	setcycle 6 right_stim circle
	setcycle 6 sound blank
	setcycle 6 correct_response space
	setcycle 6 incorrect_response None
	setcycle 7 trial_type 2
	setcycle 7 left_stim circle
	setcycle 7 right_stim circle
	setcycle 7 sound blank
	setcycle 7 correct_response space
	setcycle 7 incorrect_response None
	setcycle 8 trial_type 2
	setcycle 8 left_stim triangle
	setcycle 8 right_stim circle
	setcycle 8 sound pip3
	setcycle 8 correct_response space
	setcycle 8 incorrect_response None
	setcycle 9 trial_type 2
	setcycle 9 left_stim triangle
	setcycle 9 right_stim circle
	setcycle 9 sound pip4
	setcycle 9 correct_response space
	setcycle 9 incorrect_response None
	setcycle 10 trial_type 2
	setcycle 10 left_stim triangle
	setcycle 10 right_stim circle
	setcycle 10 sound blank
	setcycle 10 correct_response space
	setcycle 10 incorrect_response None
	setcycle 11 trial_type 2
	setcycle 11 left_stim triangle
	setcycle 11 right_stim circle
	setcycle 11 sound blank
	setcycle 11 correct_response space
	setcycle 11 incorrect_response None
	setcycle 12 trial_type 1
	setcycle 12 left_stim triangle
	setcycle 12 right_stim square
	setcycle 12 sound pip3
	setcycle 12 correct_response None
	setcycle 12 incorrect_response space
	setcycle 13 trial_type 1
	setcycle 13 left_stim triangle
	setcycle 13 right_stim square
	setcycle 13 sound pip4
	setcycle 13 correct_response None
	setcycle 13 incorrect_response space
	setcycle 14 trial_type 1
	setcycle 14 left_stim triangle
	setcycle 14 right_stim square
	setcycle 14 sound blank
	setcycle 14 correct_response None
	setcycle 14 incorrect_response space
	setcycle 15 trial_type 1
	setcycle 15 left_stim triangle
	setcycle 15 right_stim square
	setcycle 15 sound blank
	setcycle 15 correct_response None
	setcycle 15 incorrect_response space
	setcycle 16 trial_type 1
	setcycle 16 left_stim square
	setcycle 16 right_stim triangle
	setcycle 16 sound pip3
	setcycle 16 correct_response None
	setcycle 16 incorrect_response space
	setcycle 17 trial_type 1
	setcycle 17 left_stim square
	setcycle 17 right_stim triangle
	setcycle 17 sound pip4
	setcycle 17 correct_response None
	setcycle 17 incorrect_response space
	setcycle 18 trial_type 1
	setcycle 18 left_stim square
	setcycle 18 right_stim triangle
	setcycle 18 sound blank
	setcycle 18 correct_response None
	setcycle 18 incorrect_response space
	setcycle 19 trial_type 1
	setcycle 19 left_stim square
	setcycle 19 right_stim triangle
	setcycle 19 sound blank
	setcycle 19 correct_response None
	setcycle 19 incorrect_response space
	setcycle 20 trial_type 1
	setcycle 20 left_stim square
	setcycle 20 right_stim triangle
	setcycle 20 sound pip3
	setcycle 20 correct_response None
	setcycle 20 incorrect_response space
	setcycle 21 trial_type 1
	setcycle 21 left_stim square
	setcycle 21 right_stim triangle
	setcycle 21 sound pip4
	setcycle 21 correct_response None
	setcycle 21 incorrect_response space
	setcycle 22 trial_type 1
	setcycle 22 left_stim square
	setcycle 22 right_stim triangle
	setcycle 22 sound blank
	setcycle 22 correct_response None
	setcycle 22 incorrect_response space
	setcycle 23 trial_type 1
	setcycle 23 left_stim square
	setcycle 23 right_stim triangle
	setcycle 23 sound blank
	setcycle 23 correct_response None
	setcycle 23 incorrect_response space
	setcycle 24 trial_type 2
	setcycle 24 left_stim triangle
	setcycle 24 right_stim circle
	setcycle 24 sound pip3
	setcycle 24 correct_response space
	setcycle 24 incorrect_response None
	setcycle 25 trial_type 2
	setcycle 25 left_stim triangle
	setcycle 25 right_stim circle
	setcycle 25 sound pip4
	setcycle 25 correct_response space
	setcycle 25 incorrect_response None
	setcycle 26 trial_type 2
	setcycle 26 left_stim triangle
	setcycle 26 right_stim circle
	setcycle 26 sound blank
	setcycle 26 correct_response space
	setcycle 26 incorrect_response None
	setcycle 27 trial_type 2
	setcycle 27 left_stim triangle
	setcycle 27 right_stim circle
	setcycle 27 sound blank
	setcycle 27 correct_response space
	setcycle 27 incorrect_response None
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_start always
	run trial_start_response always
	run ITI_prep always
	run ITI1 always
	run ITI1_keypress always
	run earlyresponse1 always
	run ITI2_1 always
	run earlyresponse_display "[response_ITI1_keypress] = space"
	run sound "[trial_type] > 0"
	run target "[early_response] = 0"
	run keyboard_response "[early_response] = 0"
	run incorrect_display "[response_keyboard_response] = [incorrect_response] and [early_response] = 0 "
	run correct_display "[response_keyboard_response] = [correct_response] and [early_response] = 0 "

define inline_javascript qualtrics
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// copy across qualtrics ID
	// allows demographics to be matched later
	vars.qualtrics_id = jatos.urlQueryParameters.qualtrics_id
	__end__
	set _prepare ""

define repeat_cycle repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "[response_volume_kbd]!=space"

define repeat_cycle repeat_early_response
	set description "Optionally repeat a cycle from a loop"
	set condition "[response_ITI1_keypress] = space"

define inline_javascript response_code
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run "vars.response_accuracy = "
	set _prepare ""

define inline_javascript screen_info
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// changing screen variables depending on keyboard response
	if (vars.response_screen_key == 'left') {	
		vars.screen_test_x2 = vars.screen_test_x2 - 5
		vars.breaking_variable = false
	}
	
	if (vars.response_screen_key == "right") {
		vars.screen_test_x2 = vars.screen_test_x2 + 5
		vars.breaking_variable = false
	} 
	
	if (vars.response_screen_key == "space") {
		vars.breaking_variable = true
	}
	
	
	if (vars.response_screen_key == "SPACE") {
		vars.breaking_variable = true
	}
	__end__
	set _prepare ""

define keyboard_response screen_key
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "right;left;space;SPACE"

define loop screen_loop
	set source_file ""
	set source table
	set repeat 500
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = space"
	setcycle 0 empty_column ""
	run screen_sequence

define sketchpad screen_measurements
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[screen_test_x1]" x2="[screen_test_x2]" y1=-200 y2=-200 z_index=0
	draw textline center=0 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="Before the next task, we need to know the resolution of your screen.<br /><br />Place the long edge of a DEBIT/CREDIT card against the line. <br />Press the LEFT or RIGHT arrow keys to adjust length of the line <br />until it is the same length as the debit/credit card<br /><br />When ready, press 'SPACE' to continue" x=-512 y=0 z_index=0

define sequence screen_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run screen_measurements always
	run screen_key always
	run screen_info always

define sampler sound
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler stop_1
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[left_stim].png" scale=0.5 show_if=always x=-192 y=0 z_index=0
	draw image center=1 file="[right_stim].png" scale=0.5 show_if=always x=192 y=0 z_index=0
	draw fixdot color=white show_if=always style="medium-cross" x=0 y=0 z_index=0

define sketchpad target_none
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad target_square
	set duration keypress
	set description "Displays stimuli"
	draw rect color=white fill=0 h=148 penwidth=6 show_if=always w=148 x=-74 y=-74 z_index=0

define sketchpad target_triangle
	set duration keypress
	set description "Displays stimuli"
	draw line color=white penwidth=6 show_if=always x1=0 x2=-96 y1=-96 y2=64 z_index=0
	draw line color=white penwidth=6 show_if=always x1=-96 x2=96 y1=64 y2=64 z_index=0
	draw line color=white penwidth=6 show_if=always x1=0 x2=96 y1=-96 y2=64 z_index=0

define advanced_delay temporal_lead
	set jitter_mode Uniform
	set jitter 100
	set duration 250
	set description "Waits for a specified duration"

define sketchpad timeout0_display
	set duration 495
	set description "Displays stimuli"
	draw rect color=black fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0
	draw textline center=1 color=orange font_bold=yes font_family=mono font_italic=no font_size=70 html=yes show_if=always text="TOO SLOW" x=0 y=0 z_index=0

define sketchpad timeout2_display
	set duration 495
	set description "Displays stimuli"
	draw rect color=black fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0
	draw textline center=1 color=orange font_bold=yes font_family=mono font_italic=no font_size=70 html=yes show_if=always text="TOO SLOW" x=0 y=0 z_index=0

define inline_javascript timing
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run "vars.response_time = (vars.time_keyboard_response - vars.time_target)*1000"
	set _prepare ""

define sketchpad trial_start
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press 'ENTER' to start the trial." x=0 y=0 z_index=0

define sketchpad trial_start_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press 'ENTER' to start the trial." x=0 y=0 z_index=0

define keyboard_response trial_start_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response RETURN
	set allowed_responses RETURN

define keyboard_response trial_start_response_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response RETURN
	set allowed_responses RETURN

define sequence volume_calibration
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initial_volume always
	run volume_loop always

define keyboard_response volume_kbd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "up;down;space"

define loop volume_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run volume_sequence

define sequence volume_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run beeper always
	run instructions always
	run volume_kbd always
	run adjust_volume always
	run repeat_cycle always

