---
API: 2.1
OpenSesame: 3.3.11
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title LBT
set subject_parity even
set subject_nr 0
set start main
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/au706616/Documents/Git/PIP/StimulusCode"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad ITI1
	set duration "[iti1]"
	set description "Displays stimuli"

define inline_javascript ITI_prep
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.reset_x = vars.cursor_x
	vars.reset_y = vars.cursor_y
	__end__
	___prepare__
	//ITI
	vars.iti1=750+Math.random()*300;
	
	vars.iti2=1750-vars.iti1;
	//THIS NEEDS CHANGING
	__end__

define inline_javascript adjust_volume
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.response_volume_kbd === "up") {
	    vars.vol = Math.min(vars.vol + 10, 100);
	} else if (vars.response_volume_kbd === "down") {
	    vars.vol = Math.max(vars.vol - 10, 10);
	}
	__end__
	set _prepare ""

define sequence audio_check1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initial_audio always
	run audio_check_start always
	run audio_check_start2 always
	run audio_loop always
	run audio_check_res always

define sequence audio_check2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initial_audio_1 always
	run audio_check_start_1 always
	run audio_check_start2_1 always
	run audio_loop_1 always
	run audio_check_res_1 always

define sequence audio_check3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run audio_final always
	run audio_loop_2 always

define sketchpad audio_check_failed
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Unfortunately, you have failed the <br />audio check and can no longer continue<br /><br />Please take note of the following code <br />before you progress:<br /><br />CJWKQL6W<br /><br />Press any key to continue" x=0 y=0 z_index=0

define inline_javascript audio_check_res
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// if correct then add to accuracy measures
	
	if (vars.total_correct > 3){
	    vars.audio_passed = 1
	}
	
	vars.total_first = vars.total_correct // to subtract from later block
	__end__
	set _prepare ""

define inline_javascript audio_check_res_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// if correct then add to accuracy measures
	
	if ((vars.total_correct - vars.total_first) > 3){
	    vars.audio_passed = 1
	}
	__end__
	set _prepare ""

define inline_javascript audio_check_res_2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// if correct then add to accuracy measures
	
	if (vars.total_correct > 3){
	    vars.audio_passed = 1
	}
	
	vars.total_first = vars.total_correct // to subtract from later block
	__end__
	set _prepare ""

define sketchpad audio_check_start
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="AUDIO CHECK<br /><br />Now we will run a quick check,<br />to make sure the audio for <br />this experiment is working properly.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad audio_check_start2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="AUDIO CHECK<br /><br />You will hear an audio file<br />repeat either the numbers 1, 2 or 3.<br /><br />After, please press the key <br />corresponding to the number you hear.<br /><br />If you get 3 or more wrong, <br />you will have a chance to repeat this step.<br /><br />Press any key to start." x=0 y=0 z_index=0

define sketchpad audio_check_start2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="AUDIO CHECK<br /><br />You will hear an audio file<br />repeat either the numbers 1, 2 or 3.<br /><br />After, please press the key <br />corresponding to the number you hear.<br /><br />If you get 3 or more wrong, <br />you will be unable to continue <br />the experiment.<br /><br />Press any key to start." x=0 y=0 z_index=0

define sketchpad audio_check_start2_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="AUDIO CHECK<br /><br />You will hear an audio file<br />repeat either the numbers 1, 2 or 3.<br /><br />After, please press the key <br />corresponding to the number you hear.<br /><br />If you get 3 or more wrong, <br />you will have a chance to repeat this step.<br /><br />Press any key to start." x=0 y=0 z_index=0

define sketchpad audio_check_start_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="AUDIO CHECK<br /><br />Unfortunately, the first audio check<br />failed. Please make sure your sound<br />is switched on and the volume is high.<br /><br />You will now be able to repeat the check.<br /><br />Press any key to continue." x=0 y=0 z_index=0

define sketchpad audio_final
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Thank you for completing the experiment!<br /><br />There is just one, quick task left<br /><br />Please press any key to continue" x=0 y=0 z_index=0

define keyboard_response audio_kbd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[actual_response]"
	set allowed_responses "1;2;3"

define keyboard_response audio_kbd_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[actual_response]"
	set allowed_responses "1;2;3"

define keyboard_response audio_kbd_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[actual_response]"
	set allowed_responses keypress

define loop audio_loop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio one_file
	setcycle 0 actual_response 1
	setcycle 1 audio two_file
	setcycle 1 actual_response 2
	setcycle 2 audio three_file
	setcycle 2 actual_response 3
	run audio_sequence

define loop audio_loop_1
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio one_file
	setcycle 0 actual_response 1
	setcycle 1 audio two_file
	setcycle 1 actual_response 2
	setcycle 2 audio three_file
	setcycle 2 actual_response 3
	run audio_sequence_1

define loop audio_loop_2
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio seven_file
	setcycle 0 actual_response 7
	run final_audio

define sampler audio_play
	set volume 1
	set stop_after 0
	set sample "[audio].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler audio_play_1
	set volume 1
	set stop_after 0
	set sample "[audio].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler audio_play_2
	set volume 1
	set stop_after 0
	set sample "[audio].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define inline_javascript audio_response
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// if correct then add to accuracy measures
	if (correct == 1){
	    vars.accurate = 1
	    vars.tot_accuracy = vars.tot_accuracy+1
	}
	
	if (vars.total_correct > 3){
	    vars.audio_passed = 1
	}
	__end__
	set _prepare ""

define inline_javascript audio_response_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// if correct then add to accuracy measures
	if (vars.correct == 1){
	    vars.accurate = 1
	    vars.tot_accuracy = vars.tot_accuracy+1
	}
	
	if (total_correct > 3){
	    vars.audio_passed = 1
	}
	__end__
	set _prepare ""

define inline_javascript audio_response_2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// if correct then add to accuracy measures
	if (correct == 1){
	    vars.accurate = 1
	    vars.tot_accuracy = vars.tot_accuracy+1
	}
	
	if (vars.total_correct > 3){
	    vars.audio_passed = 1
	}
	__end__
	set _prepare ""

define sketchpad audio_response_text
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please press a key <br />corresponding to the number you heard.<br /><br />Either 1, 2 or 3<br />" x=0 y=0 z_index=0

define sketchpad audio_response_text_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please press a key <br />corresponding to the number you heard.<br /><br />Either 1, 2 or 3<br />" x=0 y=0 z_index=0

define sketchpad audio_response_text_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please press one key that <br />corresponds to the number you heard.<br />" x=0 y=0 z_index=0

define sketchpad audio_response_text_3
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Please press a key <br />corresponding to the number you heard.<br /><br />Either 1, 2 or 3<br />" x=0 y=0 z_index=0

define sequence audio_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prep_1 never
	run beeper_1 always
	run play_text always
	run audio_play always
	run audio_response_text_3 always
	run audio_kbd always
	run audio_response never
	run line_bisect_logger always

define sequence audio_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prep_1_1 never
	run beeper_1_1 always
	run play_text_1 always
	run audio_play_1 always
	run audio_response_text_1 always
	run audio_kbd_1 always
	run audio_response_1 never
	run line_bisect_logger always

define inline_javascript beeper
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	const beep_url = "https://softdev.ppls.ed.ac.uk/static/pip3_70.wav";
	const audio = new Audio(beep_url);
	audio.volume = vars.vol/100.0;
	audio.addEventListener(
	    "canplaythrough",
	    function () {
	        audio.play();
	    }
	);
	__end__
	set _prepare ""

define inline_javascript beeper_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.correct_response = vars.correct
	__end__
	set _prepare ""

define inline_javascript beeper_1_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.correct_response = vars.correct
	__end__
	set _prepare ""

define inline_javascript beeper_1_2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.correct_response = vars.correct
	__end__
	set _prepare ""

define loop block_1_loop
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 left_mm -40
	setcycle 0 mouse_loc 15
	setcycle 0 right_mm 40
	setcycle 0 sound blank
	setcycle 0 trial_type go
	setcycle 1 left_mm -40
	setcycle 1 mouse_loc -15
	setcycle 1 right_mm 40
	setcycle 1 sound blank
	setcycle 1 trial_type go
	setcycle 2 left_mm -40
	setcycle 2 mouse_loc 15
	setcycle 2 right_mm 40
	setcycle 2 sound blank
	setcycle 2 trial_type go
	setcycle 3 left_mm -40
	setcycle 3 mouse_loc -15
	setcycle 3 right_mm 40
	setcycle 3 sound blank
	setcycle 3 trial_type go
	setcycle 4 left_mm -40
	setcycle 4 mouse_loc 15
	setcycle 4 right_mm 40
	setcycle 4 sound pip3
	setcycle 4 trial_type go
	setcycle 5 left_mm -40
	setcycle 5 mouse_loc -15
	setcycle 5 right_mm 40
	setcycle 5 sound pip3
	setcycle 5 trial_type go
	setcycle 6 left_mm -40
	setcycle 6 mouse_loc 15
	setcycle 6 right_mm 40
	setcycle 6 sound pip4
	setcycle 6 trial_type go
	setcycle 7 left_mm -40
	setcycle 7 mouse_loc -15
	setcycle 7 right_mm 40
	setcycle 7 sound pip4
	setcycle 7 trial_type go
	setcycle 8 left_mm -40
	setcycle 8 mouse_loc 15
	setcycle 8 right_mm 80
	setcycle 8 sound blank
	setcycle 8 trial_type go
	setcycle 9 left_mm -40
	setcycle 9 mouse_loc -15
	setcycle 9 right_mm 80
	setcycle 9 sound blank
	setcycle 9 trial_type go
	setcycle 10 left_mm -40
	setcycle 10 mouse_loc 15
	setcycle 10 right_mm 80
	setcycle 10 sound blank
	setcycle 10 trial_type go
	setcycle 11 left_mm -40
	setcycle 11 mouse_loc -15
	setcycle 11 right_mm 80
	setcycle 11 sound blank
	setcycle 11 trial_type go
	setcycle 12 left_mm -40
	setcycle 12 mouse_loc 15
	setcycle 12 right_mm 80
	setcycle 12 sound pip3
	setcycle 12 trial_type go
	setcycle 13 left_mm -40
	setcycle 13 mouse_loc -15
	setcycle 13 right_mm 80
	setcycle 13 sound pip3
	setcycle 13 trial_type go
	setcycle 14 left_mm -40
	setcycle 14 mouse_loc 15
	setcycle 14 right_mm 80
	setcycle 14 sound pip4
	setcycle 14 trial_type go
	setcycle 15 left_mm -40
	setcycle 15 mouse_loc -15
	setcycle 15 right_mm 80
	setcycle 15 sound pip4
	setcycle 15 trial_type go
	setcycle 16 left_mm -80
	setcycle 16 mouse_loc 15
	setcycle 16 right_mm 40
	setcycle 16 sound blank
	setcycle 16 trial_type go
	setcycle 17 left_mm -80
	setcycle 17 mouse_loc -15
	setcycle 17 right_mm 40
	setcycle 17 sound blank
	setcycle 17 trial_type go
	setcycle 18 left_mm -80
	setcycle 18 mouse_loc 15
	setcycle 18 right_mm 40
	setcycle 18 sound blank
	setcycle 18 trial_type go
	setcycle 19 left_mm -80
	setcycle 19 mouse_loc -15
	setcycle 19 right_mm 40
	setcycle 19 sound blank
	setcycle 19 trial_type go
	setcycle 20 left_mm -80
	setcycle 20 mouse_loc 15
	setcycle 20 right_mm 40
	setcycle 20 sound pip3
	setcycle 20 trial_type go
	setcycle 21 left_mm -80
	setcycle 21 mouse_loc -15
	setcycle 21 right_mm 40
	setcycle 21 sound pip3
	setcycle 21 trial_type go
	setcycle 22 left_mm -80
	setcycle 22 mouse_loc 15
	setcycle 22 right_mm 40
	setcycle 22 sound pip4
	setcycle 22 trial_type go
	setcycle 23 left_mm -80
	setcycle 23 mouse_loc -15
	setcycle 23 right_mm 40
	setcycle 23 sound pip4
	setcycle 23 trial_type go
	setcycle 24 left_mm -80
	setcycle 24 mouse_loc 15
	setcycle 24 right_mm 80
	setcycle 24 sound blank
	setcycle 24 trial_type go
	setcycle 25 left_mm -80
	setcycle 25 mouse_loc -15
	setcycle 25 right_mm 80
	setcycle 25 sound blank
	setcycle 25 trial_type go
	setcycle 26 left_mm -80
	setcycle 26 mouse_loc 15
	setcycle 26 right_mm 80
	setcycle 26 sound blank
	setcycle 26 trial_type go
	setcycle 27 left_mm -80
	setcycle 27 mouse_loc -15
	setcycle 27 right_mm 80
	setcycle 27 sound blank
	setcycle 27 trial_type go
	setcycle 28 left_mm -80
	setcycle 28 mouse_loc 15
	setcycle 28 right_mm 80
	setcycle 28 sound pip3
	setcycle 28 trial_type go
	setcycle 29 left_mm -80
	setcycle 29 mouse_loc -15
	setcycle 29 right_mm 80
	setcycle 29 sound pip3
	setcycle 29 trial_type go
	setcycle 30 left_mm -80
	setcycle 30 mouse_loc 15
	setcycle 30 right_mm 80
	setcycle 30 sound pip4
	setcycle 30 trial_type go
	setcycle 31 left_mm -80
	setcycle 31 mouse_loc -15
	setcycle 31 right_mm 80
	setcycle 31 sound pip4
	setcycle 31 trial_type go
	run block_1_sequence

define sequence block_1_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prep always
	run reset_cursor_position always
	run reset_cursor_response always
	run ITI_prep always
	run hiding_cursor always
	run ITI1 always
	run sound always
	run showing_cursor always
	run line always
	run line_mouse_response always
	run cursor_locs always
	run valid_check always
	run too_slow "[response_time_line_mouse_response] > 4995"
	run line_bisect_logger always
	run repeat_void always

define sequence block_2_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prep always
	run reset_cursor_position always
	run reset_cursor_response always
	run ITI_prep always
	run hiding_cursor always
	run ITI1 always
	run sound always
	run showing_cursor always
	run line always
	run line_mouse_response always
	run cursor_locs always
	run valid_check always
	run too_slow "[response_time_line_mouse_response] > 4995"
	run line_bisect_logger always
	run repeat_void always

define sketchpad block_one_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="You have completed the first block.<br /><br />We reccommend that you continue <br />to the next block as soon as possible<br /><br />Press SPACE to start" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="" x=-288 y=-384 z_index=0

define loop block_two_loop
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 left_mm -40
	setcycle 0 mouse_loc 15
	setcycle 0 right_mm 40
	setcycle 0 sound blank
	setcycle 0 trial_type go
	setcycle 1 left_mm -40
	setcycle 1 mouse_loc -15
	setcycle 1 right_mm 40
	setcycle 1 sound blank
	setcycle 1 trial_type go
	setcycle 2 left_mm -40
	setcycle 2 mouse_loc 15
	setcycle 2 right_mm 40
	setcycle 2 sound blank
	setcycle 2 trial_type go
	setcycle 3 left_mm -40
	setcycle 3 mouse_loc -15
	setcycle 3 right_mm 40
	setcycle 3 sound blank
	setcycle 3 trial_type go
	setcycle 4 left_mm -40
	setcycle 4 mouse_loc 15
	setcycle 4 right_mm 40
	setcycle 4 sound pip3
	setcycle 4 trial_type go
	setcycle 5 left_mm -40
	setcycle 5 mouse_loc -15
	setcycle 5 right_mm 40
	setcycle 5 sound pip3
	setcycle 5 trial_type go
	setcycle 6 left_mm -40
	setcycle 6 mouse_loc 15
	setcycle 6 right_mm 40
	setcycle 6 sound pip4
	setcycle 6 trial_type go
	setcycle 7 left_mm -40
	setcycle 7 mouse_loc -15
	setcycle 7 right_mm 40
	setcycle 7 sound pip4
	setcycle 7 trial_type go
	setcycle 8 left_mm -40
	setcycle 8 mouse_loc 15
	setcycle 8 right_mm 80
	setcycle 8 sound blank
	setcycle 8 trial_type go
	setcycle 9 left_mm -40
	setcycle 9 mouse_loc -15
	setcycle 9 right_mm 80
	setcycle 9 sound blank
	setcycle 9 trial_type go
	setcycle 10 left_mm -40
	setcycle 10 mouse_loc 15
	setcycle 10 right_mm 80
	setcycle 10 sound blank
	setcycle 10 trial_type go
	setcycle 11 left_mm -40
	setcycle 11 mouse_loc -15
	setcycle 11 right_mm 80
	setcycle 11 sound blank
	setcycle 11 trial_type go
	setcycle 12 left_mm -40
	setcycle 12 mouse_loc 15
	setcycle 12 right_mm 80
	setcycle 12 sound pip3
	setcycle 12 trial_type go
	setcycle 13 left_mm -40
	setcycle 13 mouse_loc -15
	setcycle 13 right_mm 80
	setcycle 13 sound pip3
	setcycle 13 trial_type go
	setcycle 14 left_mm -40
	setcycle 14 mouse_loc 15
	setcycle 14 right_mm 80
	setcycle 14 sound pip4
	setcycle 14 trial_type go
	setcycle 15 left_mm -40
	setcycle 15 mouse_loc -15
	setcycle 15 right_mm 80
	setcycle 15 sound pip4
	setcycle 15 trial_type go
	setcycle 16 left_mm -80
	setcycle 16 mouse_loc 15
	setcycle 16 right_mm 40
	setcycle 16 sound blank
	setcycle 16 trial_type go
	setcycle 17 left_mm -80
	setcycle 17 mouse_loc -15
	setcycle 17 right_mm 40
	setcycle 17 sound blank
	setcycle 17 trial_type go
	setcycle 18 left_mm -80
	setcycle 18 mouse_loc 15
	setcycle 18 right_mm 40
	setcycle 18 sound blank
	setcycle 18 trial_type go
	setcycle 19 left_mm -80
	setcycle 19 mouse_loc -15
	setcycle 19 right_mm 40
	setcycle 19 sound blank
	setcycle 19 trial_type go
	setcycle 20 left_mm -80
	setcycle 20 mouse_loc 15
	setcycle 20 right_mm 40
	setcycle 20 sound pip3
	setcycle 20 trial_type go
	setcycle 21 left_mm -80
	setcycle 21 mouse_loc -15
	setcycle 21 right_mm 40
	setcycle 21 sound pip3
	setcycle 21 trial_type go
	setcycle 22 left_mm -80
	setcycle 22 mouse_loc 15
	setcycle 22 right_mm 40
	setcycle 22 sound pip4
	setcycle 22 trial_type go
	setcycle 23 left_mm -80
	setcycle 23 mouse_loc -15
	setcycle 23 right_mm 40
	setcycle 23 sound pip4
	setcycle 23 trial_type go
	setcycle 24 left_mm -80
	setcycle 24 mouse_loc 15
	setcycle 24 right_mm 80
	setcycle 24 sound blank
	setcycle 24 trial_type go
	setcycle 25 left_mm -80
	setcycle 25 mouse_loc -15
	setcycle 25 right_mm 80
	setcycle 25 sound blank
	setcycle 25 trial_type go
	setcycle 26 left_mm -80
	setcycle 26 mouse_loc 15
	setcycle 26 right_mm 80
	setcycle 26 sound blank
	setcycle 26 trial_type go
	setcycle 27 left_mm -80
	setcycle 27 mouse_loc -15
	setcycle 27 right_mm 80
	setcycle 27 sound blank
	setcycle 27 trial_type go
	setcycle 28 left_mm -80
	setcycle 28 mouse_loc 15
	setcycle 28 right_mm 80
	setcycle 28 sound pip3
	setcycle 28 trial_type go
	setcycle 29 left_mm -80
	setcycle 29 mouse_loc -15
	setcycle 29 right_mm 80
	setcycle 29 sound pip3
	setcycle 29 trial_type go
	setcycle 30 left_mm -80
	setcycle 30 mouse_loc 15
	setcycle 30 right_mm 80
	setcycle 30 sound pip4
	setcycle 30 trial_type go
	setcycle 31 left_mm -80
	setcycle 31 mouse_loc -15
	setcycle 31 right_mm 80
	setcycle 31 sound pip4
	setcycle 31 trial_type go
	run block_2_sequence

define sketchpad break_time_stamp
	set duration 100
	set description "Displays stimuli"

define inline_javascript cursor_locs
	set description "Executes JavaScript code"
	___run__
	// saving cursor locations
	vars.bisect_x = vars.cursor_x
	vars.bisect_y = vars.cursor_y
	__end__
	set _prepare ""

define sketchpad dot_calibration_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="We need to collect information <br />on your screen resolution.<br /><br />White dots will appear on the screen one at a time, <br />please use you cursor to click <br />on the center of each of them in turn.<br /><br />Press SPACE to start." x=0 y=0 z_index=0

define loop dot_calibration_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run dot_calibration_sequence

define inline_javascript dot_calibration_prep
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	// preparing for the experiment
	// calculate mm per pixel based on debit card actual length + pixels of line from this 
	vars.card_pix = vars.screen_test_x2 - vars.screen_test_x1
	vars.pix_permm = vars.card_pix/vars.card_mm //x resolution divided by widthx10
	__end__

define sequence dot_calibration_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run dot_calibration_prep always
	run dot_calibration_y1 always
	run dot_response_1 always
	run dot_save_y1 always
	run dot_calibration_y2 always
	run dot_response_1 always
	run dot_save_y2 always
	run dot_calibration_y3 always
	run dot_response_1 always
	run dot_save_y3 always
	run dot_calibration_x1 always
	run dot_response_1 always
	run dot_sav_x1 always
	run dot_calibration_x2 always
	run dot_response_1 always
	run dot_sav_x2 always
	run dot_calibration_x3 always
	run dot_response_1 always
	run dot_sav_x3 always
	run dot_calibration_x4 always
	run dot_response_1 always
	run dot_sav_x4 always
	run dot_calibration_x5 always
	run dot_response_1 always
	run dot_sav_x5 always
	run dot_calibration_x6 always
	run dot_response_1 always
	run dot_sav_x6 always

define sketchpad dot_calibration_x1
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=-480 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=-480 y=0 z_index=0

define sketchpad dot_calibration_x2
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=-320 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=-320 y=0 z_index=0

define sketchpad dot_calibration_x3
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=-192 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=-192 y=0 z_index=0

define sketchpad dot_calibration_x4
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=192 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=192 y=0 z_index=0

define sketchpad dot_calibration_x5
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=320 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=320 y=0 z_index=0

define sketchpad dot_calibration_x6
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=480 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=480 y=0 z_index=0

define sketchpad dot_calibration_y1
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=0 y=-320 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=-320 z_index=0

define sketchpad dot_calibration_y2
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=0 y=0 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad dot_calibration_y3
	set duration 0
	set description "Displays stimuli"
	draw circle color=white fill=1 penwidth=1 r=10 show_if=always x=0 y=320 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=320 z_index=0

define mouse_response dot_response_1
	set timeout 3000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define inline_javascript dot_sav_x1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_left480x = -480
	vars.calib_loc_left480x = vars.cursor_x
	vars.dot_loc_left480x_y = 0
	vars.calib_loc_left480x_y = vars.cursor_y
	__end__
	set _prepare ""

define inline_javascript dot_sav_x2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_left320x = -320
	vars.calib_loc_left320x = vars.cursor_x
	vars.dot_loc_left320x_y = 0
	vars.calib_loc_left320x_y = vars.cursor_y
	__end__
	set _prepare ""

define inline_javascript dot_sav_x3
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_left192x = -192
	vars.calib_loc_left192x = vars.cursor_x
	vars.dot_loc_left192x_y = 0
	vars.calib_loc_left192x_y = vars.cursor_y
	__end__
	set _prepare ""

define inline_javascript dot_sav_x4
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_right192x = 192
	vars.calib_loc_right192x = vars.cursor_x
	vars.dot_loc_right192x_y = 0
	vars.calib_loc_right192x_y = vars.cursor_y
	__end__
	set _prepare ""

define inline_javascript dot_sav_x5
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_right320x = 320
	vars.calib_loc_right320x = vars.cursor_x
	vars.dot_loc_right320x_y = 0
	vars.calib_loc_right320x_y = vars.cursor_y
	__end__
	set _prepare ""

define inline_javascript dot_sav_x6
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_right480x = 480
	vars.calib_loc_right480x = vars.cursor_x
	vars.dot_loc_right480x_y = 0
	vars.calib_loc_right480x_y = vars.cursor_y
	__end__
	set _prepare ""

define inline_javascript dot_save_y1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_uppery_y = -320
	vars.calib_loc_uppery_y = vars.cursor_y
	vars.dot_loc_uppery_x = 0
	vars.calib_loc_uppery_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_save_y2
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_midy = 0
	vars.calib_loc_midy = vars.cursor_y
	vars.dot_loc_midy_x = 0
	vars.calib_loc_midy_x = vars.cursor_x
	__end__
	set _prepare ""

define inline_javascript dot_save_y3
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.dot_loc_lowery = 320
	vars.calib_loc_lowery = vars.cursor_y
	vars.dot_loc_lowery_x = 0
	vars.calib_loc_lowery_x = vars.cursor_x
	__end__
	set _prepare ""

define sketchpad experiment_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="The main experiment has finished.<br /><br />Please take note of the following<br />code to receive compensation:<br /><br />48D8A3C0<br /><br />Press SPACE to continue" x=0 y=0 z_index=0

define sequence experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run line_bisection_intro always
	run line_bisection_intro_1 always
	run practice_loop always
	run experiment_start always
	run block_1_loop always
	run block_one_end always
	run break_time_stamp always
	run block_two_loop always

define sketchpad experiment_start
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="The practice is now over<br /><br />You will now move on to the main task<br /><br />This will consist of 2x 5-10 minute sessions<br /><br />To start the main task, press SPACE." x=0 y=0 z_index=0

define sequence final_audio
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run play_text_2 always
	run audio_play_2 always
	run audio_response_text_2 always
	run audio_kbd_2 always
	run line_bisect_logger always

define inline_javascript hiding_cursor
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	const cursor_style = document.getElementById("cursor-style-temp");
	document.head.removeChild(cursor_style);
	const style = document.createElement("style");
	style.innerHTML = "canvas { cursor: none !important; }";
	style.id = "cursor-style-temp";
	document.head.appendChild(style);
	__end__
	set _prepare ""

define inline_javascript initial_audio
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.tot_accuracy = 0 //start with total inaccuracy = 0
	vars.audio_passed = 0
	__end__

define inline_javascript initial_audio_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.tot_accuracy = 0 //start with total inaccuracy = 0
	vars.total_correct = 0
	vars.audio_passed = 0
	__end__
	set _prepare ""

define inline_javascript initial_audio_2
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.tot_accuracy = 0 //start with total inaccuracy = 0
	vars.audio_passed = 0
	__end__

define inline_javascript initial_volume
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	set _prepare "vars.vol = 50;"

define sketchpad instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Volume is [vol]%<br /><br />Too loud? Press the down arrow to make it quieter.<br /><br />Too quiet? Press the up arrow to make it louder.<br /><br />Just right? Press the space bar to continue.<br /><br />PLEASE NOTE: <br />Make sure your computer volume is high and<br />do not adjust for the rest of the study" x=0 y=-32 z_index=0

define inline_javascript java_global_prep
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// packages useful for generating random arrays and selecting from them
	// handing for varying target onset time
	//import random from 'random'
	//from random import choice
	//import numpy as np
	
	//import math
	
	//beep = items['beep']
	//blank = items['blank']
	
	//response items
	//stim, response = items['line'], items['line_mouse_response']
	
	// screen measurement variables that need defining
	vars.breaking_variable = false
	// line location
	vars.screen_test_x1 = -450
	vars.screen_test_x2 = 0
	vars.line_y_pos = 0
	vars.card_mm = 86 //for finding mm per pix
	vars.response_mouseclick_done = 0
	
	//LocalDate date = LocalDate.now()
	//t0 = clock.time()
	
	// recording log file specfic to experiment
	//subject_nr_string = Integer.toString(vars.subject_nr)
	//data_path = u'/home/experimenter/DMT-AD/DMT2019_rawdata/'
	//vars.data_string = 'subject{sub}_{title}_{date}.csv'
	
	vars.response = "None"
	vars.reset_cursor_text = "click the dot"
	vars.total_correct = 0 // define variable early
	__end__
	set _prepare ""

define sketchpad line
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[left_pix]" x2="[right_pix]" y1="[y_pix]" y2="[y_pix]" z_index=0

define logger line_bisect_logger
	set description "Logs experimental data"
	set auto_log yes

define logger line_bisect_logger_1
	set description "Logs experimental data"
	set auto_log yes

define sketchpad line_bisection_intro
	set duration keypress
	set description "Displays stimuli"
	draw line color=white penwidth=2 show_if=always x1=0 x2=0 y1=-96 y2=-57 z_index=0
	draw line color=white penwidth=2 show_if=always x1=-20 x2=20 y1=-78 y2=-78 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="MAIN TASK<br /><br />Your task is to click the middle of <br />the line when it appears on the screen <br />using the cursor" x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="If you click outside the bounds of<br />the line, the trial will be repeated<br />at the end of the block." x=0 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Your cursor will look like this:" x=0 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Press SPACE to continue" x=0 y=256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Please do not use any additional tools to <br />identify the midpoint" x=0 y=0 z_index=0

define sketchpad line_bisection_intro_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="MAIN TASK<br /><br />" x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="On some trials you will hear a sound when<br />the line appears, <br />on other trials you will hear no sound<br /><br />During both trial types, <br />please perform the task as normal<br />by clicking the perceived midpoint as<br />quickly and as accurately as possible.<br /><br />First, you will be given <br />a chance to practise the task.<br /><br />This will only last 2-3 minutes." x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Press SPACE to start the practice" x=0 y=256 z_index=0

define mouse_response line_mouse_response
	set timeout 5000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define sequence main
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run outside_loop always

define loop outside_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run outside_sequence

define sequence outside_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run java_global_prep always
	run prolific never
	run screen_loop always
	run dot_calibration_instructions always
	run dot_calibration_loop always
	run volume_calibration never
	run audio_check1 always
	run audio_check2 "[total_correct] < 4"
	run audio_check_failed "[audio_passed] = 0"
	run experiment_sequence "[audio_passed] = 1"
	run audio_check3 "[audio_passed] = 1"
	run experiment_end "[audio_passed] = 1"

define sketchpad play_text
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="PLAYING AUDIO FILE<br /><br />Please wait to respond <br />until you see the next screen<br /><br />[count_audio_sequence1]/6<br />" x=0 y=0 z_index=0

define sketchpad play_text_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="PLAYING AUDIO FILE<br />Please wait to respond<br /><br />[count_audio_sequence2]/6<br />" x=0 y=0 z_index=0

define sketchpad play_text_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="PLAYING AUDIO FILE<br /><br />Please listen to the number being<br />repeated<br />Wait to respond<br /><br />1/1<br />" x=0 y=0 z_index=0

define inline_javascript prac_prep
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	const style = document.createElement("style");
	style.innerHTML = "canvas { cursor: crosshair !important; }";
	style.id = "cursor-style-temp";
	document.head.appendChild(style);
	
	vars.practice = 1
	
	// trial dependent instructions on where to place cursor
	if (vars.count_practice_sequence < 6){
		vars.reset_cursor_text = 'click the dot'
	} else {
	    vars.reset_cursor_text = ''
	}
	__end__
	___prepare__
	// preparing for the experiment
	
	// calculate mm per pixel based on debit card actual length + pixels of line from this 
	vars.card_pix = vars.screen_test_x2 - vars.screen_test_x1
	vars.pix_permm = vars.card_pix/vars.card_mm //x resolution divided by widthx10
	
	// start-point of the line
	vars.left_pix = vars.pix_permm*vars.left_mm
	vars.right_pix = vars.pix_permm*vars.right_mm
	vars.y_pix = vars.pix_permm*vars.line_y_pos
	
	// get line length in pixels for later calc
	vars.linelength_pix = vars.right_pix - vars.left_pix
	
	// click box locations
	vars.mouse_loc_pix = vars.mouse_loc*vars.pix_permm
	vars.click_pix_y = 35*vars.pix_permm
	vars.mouse_loc_pix_y = 25*vars.pix_permm
	
	// set void trial back to 0
	vars.void_trial = false
	__end__

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 left_mm -40
	setcycle 0 mouse_loc 15
	setcycle 0 right_mm 40
	setcycle 0 sound blank
	setcycle 0 trial_type go
	setcycle 1 left_mm -40
	setcycle 1 mouse_loc -15
	setcycle 1 right_mm 40
	setcycle 1 sound blank
	setcycle 1 trial_type go
	setcycle 2 left_mm -40
	setcycle 2 mouse_loc 15
	setcycle 2 right_mm 40
	setcycle 2 sound blank
	setcycle 2 trial_type go
	setcycle 3 left_mm -40
	setcycle 3 mouse_loc -15
	setcycle 3 right_mm 40
	setcycle 3 sound blank
	setcycle 3 trial_type go
	setcycle 4 left_mm -40
	setcycle 4 mouse_loc 15
	setcycle 4 right_mm 40
	setcycle 4 sound pip3
	setcycle 4 trial_type go
	setcycle 5 left_mm -40
	setcycle 5 mouse_loc -15
	setcycle 5 right_mm 40
	setcycle 5 sound pip3
	setcycle 5 trial_type go
	setcycle 6 left_mm -40
	setcycle 6 mouse_loc 15
	setcycle 6 right_mm 40
	setcycle 6 sound pip4
	setcycle 6 trial_type go
	setcycle 7 left_mm -40
	setcycle 7 mouse_loc -15
	setcycle 7 right_mm 40
	setcycle 7 sound pip4
	setcycle 7 trial_type go
	setcycle 8 left_mm -40
	setcycle 8 mouse_loc 15
	setcycle 8 right_mm 80
	setcycle 8 sound blank
	setcycle 8 trial_type go
	setcycle 9 left_mm -40
	setcycle 9 mouse_loc -15
	setcycle 9 right_mm 80
	setcycle 9 sound blank
	setcycle 9 trial_type go
	setcycle 10 left_mm -40
	setcycle 10 mouse_loc 15
	setcycle 10 right_mm 80
	setcycle 10 sound blank
	setcycle 10 trial_type go
	setcycle 11 left_mm -40
	setcycle 11 mouse_loc -15
	setcycle 11 right_mm 80
	setcycle 11 sound blank
	setcycle 11 trial_type go
	setcycle 12 left_mm -40
	setcycle 12 mouse_loc 15
	setcycle 12 right_mm 80
	setcycle 12 sound pip3
	setcycle 12 trial_type go
	setcycle 13 left_mm -40
	setcycle 13 mouse_loc -15
	setcycle 13 right_mm 80
	setcycle 13 sound pip3
	setcycle 13 trial_type go
	setcycle 14 left_mm -40
	setcycle 14 mouse_loc 15
	setcycle 14 right_mm 80
	setcycle 14 sound pip4
	setcycle 14 trial_type go
	setcycle 15 left_mm -40
	setcycle 15 mouse_loc -15
	setcycle 15 right_mm 80
	setcycle 15 sound pip4
	setcycle 15 trial_type go
	setcycle 16 left_mm -80
	setcycle 16 mouse_loc 15
	setcycle 16 right_mm 40
	setcycle 16 sound blank
	setcycle 16 trial_type go
	setcycle 17 left_mm -80
	setcycle 17 mouse_loc -15
	setcycle 17 right_mm 40
	setcycle 17 sound blank
	setcycle 17 trial_type go
	setcycle 18 left_mm -80
	setcycle 18 mouse_loc 15
	setcycle 18 right_mm 40
	setcycle 18 sound blank
	setcycle 18 trial_type go
	setcycle 19 left_mm -80
	setcycle 19 mouse_loc -15
	setcycle 19 right_mm 40
	setcycle 19 sound blank
	setcycle 19 trial_type go
	setcycle 20 left_mm -80
	setcycle 20 mouse_loc 15
	setcycle 20 right_mm 40
	setcycle 20 sound pip3
	setcycle 20 trial_type go
	setcycle 21 left_mm -80
	setcycle 21 mouse_loc -15
	setcycle 21 right_mm 40
	setcycle 21 sound pip3
	setcycle 21 trial_type go
	setcycle 22 left_mm -80
	setcycle 22 mouse_loc 15
	setcycle 22 right_mm 40
	setcycle 22 sound pip4
	setcycle 22 trial_type go
	setcycle 23 left_mm -80
	setcycle 23 mouse_loc -15
	setcycle 23 right_mm 40
	setcycle 23 sound pip4
	setcycle 23 trial_type go
	setcycle 24 left_mm -80
	setcycle 24 mouse_loc 15
	setcycle 24 right_mm 80
	setcycle 24 sound blank
	setcycle 24 trial_type go
	setcycle 25 left_mm -80
	setcycle 25 mouse_loc -15
	setcycle 25 right_mm 80
	setcycle 25 sound blank
	setcycle 25 trial_type go
	setcycle 26 left_mm -80
	setcycle 26 mouse_loc 15
	setcycle 26 right_mm 80
	setcycle 26 sound blank
	setcycle 26 trial_type go
	setcycle 27 left_mm -80
	setcycle 27 mouse_loc -15
	setcycle 27 right_mm 80
	setcycle 27 sound blank
	setcycle 27 trial_type go
	setcycle 28 left_mm -80
	setcycle 28 mouse_loc 15
	setcycle 28 right_mm 80
	setcycle 28 sound pip3
	setcycle 28 trial_type go
	setcycle 29 left_mm -80
	setcycle 29 mouse_loc -15
	setcycle 29 right_mm 80
	setcycle 29 sound pip3
	setcycle 29 trial_type go
	setcycle 30 left_mm -80
	setcycle 30 mouse_loc 15
	setcycle 30 right_mm 80
	setcycle 30 sound pip4
	setcycle 30 trial_type go
	setcycle 31 left_mm -80
	setcycle 31 mouse_loc -15
	setcycle 31 right_mm 80
	setcycle 31 sound pip4
	setcycle 31 trial_type go
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prac_prep always
	run reset_cursor_position always
	run reset_cursor_response always
	run ITI_prep always
	run hiding_cursor always
	run ITI1 always
	run sound always
	run showing_cursor always
	run line always
	run line_mouse_response always
	run cursor_locs always
	run valid_check always
	run too_slow "[response_time_line_mouse_response] > 4995"
	run line_bisect_logger always

define inline_javascript prep
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	const style = document.createElement("style");
	style.innerHTML = "canvas { cursor: crosshair !important; }";
	style.id = "cursor-style-temp";
	document.head.appendChild(style);
	
	vars.practice = 0
	
	// trial dependent instructions on where to place cursor
	if (vars.count_block_1_sequence < 6){
		vars.reset_cursor_text = 'click the dot'
	} else {
	    vars.reset_cursor_text = ''
	}
	__end__
	___prepare__
	// preparing for the experiment
	
	// calculate mm per pixel based on debit card actual length + pixels of line from this 
	vars.card_pix = vars.screen_test_x2 - vars.screen_test_x1
	vars.pix_permm = vars.card_pix/vars.card_mm //x resolution divided by widthx10
	
	// start-point of the line
	vars.left_pix = vars.pix_permm*vars.left_mm
	vars.right_pix = vars.pix_permm*vars.right_mm
	vars.y_pix = vars.pix_permm*vars.line_y_pos
	
	// get line length in pixels for later calc
	vars.linelength_pix = vars.right_pix - vars.left_pix
	
	// click box locations
	vars.mouse_loc_pix = vars.mouse_loc*vars.pix_permm
	vars.click_pix_y = 35*vars.pix_permm
	vars.mouse_loc_pix_y = 25*vars.pix_permm
	
	// set void trial back to 0
	vars.void_trial = false
	__end__

define inline_javascript prep_1
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.count_audio_sequence1 = vars.count_audio_sequence+1
	vars.accurate = 0 //assuming inaccuracy
	vars.total_correct = 0
	__end__

define inline_javascript prep_1_1
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.count_audio_sequence2 = vars.count_audio_sequence_1+1
	vars.accurate = 0 //assuming inaccuracy
	__end__

define inline_javascript prep_1_2
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.count_audio_sequence1 = vars.count_audio_sequence+1
	vars.accurate = 0 //assuming inaccuracy
	vars.total_correct = 0
	__end__

define inline_javascript prolific
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// copy across qualtrics ID
	// allows demographics to be matched later
	vars.prolific_id = jatos.urlQueryParameters.PROLIFIC_PID
	__end__
	set _prepare ""

define repeat_cycle repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "[response_volume_kbd]!=space"

define repeat_cycle repeat_void
	set description "Optionally repeat a cycle from a loop"
	set condition "[void_trial] = 1"

define sketchpad reset_cursor_position
	set duration 0
	set description "Displays stimuli"
	draw fixdot color="#6baeff" show_if=always style=default x="[mouse_loc_pix]" y="[mouse_loc_pix_y]" z_index=0
	draw textline center=1 color="#6baeff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[reset_cursor_text]" x=0 y=0 z_index=0

define mouse_response reset_cursor_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses "left_button;right_button"

define inline_javascript screen_info
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// changing screen variables depending on keyboard response
	if (vars.response_screen_key == 'left') {	
		vars.screen_test_x2 = vars.screen_test_x2 - 5
		vars.breaking_variable = false
	}
	
	if (vars.response_screen_key == "right") {
		vars.screen_test_x2 = vars.screen_test_x2 + 5
		vars.breaking_variable = false
	} 
	
	if (vars.response_screen_key == "space") {
		vars.breaking_variable = true
	}
	
	
	if (vars.response_screen_key == "SPACE") {
		vars.breaking_variable = true
	}
	__end__
	set _prepare ""

define keyboard_response screen_key
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "right;left;space;SPACE"

define loop screen_loop
	set source table
	set repeat 500
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = space"
	setcycle 0 empty_column ""
	run screen_sequence

define sketchpad screen_measurements
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[screen_test_x1]" x2="[screen_test_x2]" y1=-200 y2=-200 z_index=0
	draw textline center=0 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Before the next task, <br />we need to know the resolution of your screen.<br /><br />Place the long edge of a DEBIT/CREDIT card against the line. <br />To adjust length of the line, <br />press the LEFT or RIGHT arrow keys <br />until it is the same length as the debit/credit card<br /><br />When ready, press 'SPACE' to continue" x=-416 y=-96 z_index=0

define sequence screen_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run screen_measurements always
	run screen_key always
	run screen_info always

define inline_javascript showing_cursor
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	const cursor_style = document.getElementById("cursor-style-temp");
	document.head.removeChild(cursor_style);
	const style = document.createElement("style");
	style.innerHTML = "canvas { cursor: crosshair !important; }";
	style.id = "cursor-style-temp";
	document.head.appendChild(style);
	__end__
	set _prepare ""

define sampler sound
	set volume 1
	set stop_after 0
	set sample "[sound].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad too_slow
	set duration 750
	set description "Displays stimuli"
	draw textline center=1 color="#ffaf30" font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="TOO SLOW" x=0 y=0 z_index=0

define inline_javascript valid_check
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	
	// marking voided trial when they click outside bounds of line
	// or when they are too slow
	
	if (vars.response_time_line_mouse_response > 4995){
		vars.void_trial = 1
	}
	
	if (vars.cursor_y > (vars.y_pix+(vars.pix_permm*10))){
		vars.void_trial = 1
	}
	
	if (vars.cursor_y < (vars.y_pix-(vars.pix_permm*10))){
		vars.void_trial = 1
	}
		
	if (vars.cursor_x < (vars.left_pix)){
		vars.void_trial = 1
	}
		
	if (vars.cursor_x > (vars.right_pix)){
		vars.void_trial = 1
	}
	__end__
	set _prepare ""

define sketchpad volume_calib_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Next, we need to check the volume<br />of the sounds for this experiment.<br /><br />To do this, please set your computer <br />volume to high and do not <br />adjust for the rest of the study<br /><br />Press SPACE to start." x=0 y=0 z_index=0

define sequence volume_calibration
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initial_volume always
	run volume_calib_instructions always
	run volume_loop always

define keyboard_response volume_kbd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "up;down;space"

define loop volume_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run volume_sequence

define sequence volume_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run beeper always
	run instructions always
	run volume_kbd always
	run adjust_volume always
	run repeat_cycle always

